---
API: 2.1
OpenSesame: 3.3.13b1
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start plugin_installer
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/home/bob/Desktop"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background black

define sketchpad done
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Done!" x=-32 y=-32 z_index=0

define inline_script execute
	set description "Executes Python code"
	___run__
	import subprocess
	import sys
	
	keylist = var.response_options.split(';')
	my_keyboard = keyboard()
	key, time = my_keyboard.get_key(keylist=keylist)
	keys = ['1', '2']
	
	
	def run(cmd):
		
		proc = subprocess.run(cmd, capture_output=True, text=True)
		
		return proc.returncode, proc.stdout, proc.stderr
	
	
	if key in keys:
		if key == '1':
			var.feedback = 1
			cmd = [
				sys.executable,
				"-m",
				"pip",
				"install",
				] + var.arg.split() + var.package.split()
	
		elif key == '2':
			var.feedback = 1
			cmd = [
				sys.executable,
				"-m",
				"pip",
				"uninstall",
				"-y",
				] + var.package.split()
		
		var.cmd = " ".join(cmd)
		print(var.cmd)
		
		code, out, err = run(cmd)
	
		var.feedback_exit = code
		var.feedback_error = err
		var.feedback_out = out
		
		print(out)
		print(code)
		print(err)
	else:
		var.cmd = ""
		var.feedback_exit = ""
		var.feedback_error = ""
		var.feedback_out = "Nothing to do"
		var.feedback = 0
	
	var.package_list = var.package.split()
	var.package_string = "\n".join(var.package_list)
	__end__
	set _prepare ""

define loop installer_loop
	set source_file "[file_package_list]"
	set source file
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 13
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 opt1 ""
	setcycle 0 opt2 ""
	setcycle 0 opt3 ""
	setcycle 0 package ""
	setcycle 0 package_name ""
	setcycle 0 response_options ""
	setcycle 0 arg ""
	setcycle 1 opt1 ""
	setcycle 1 opt2 ""
	setcycle 1 opt3 ""
	setcycle 1 package ""
	setcycle 1 package_name ""
	setcycle 1 response_options ""
	setcycle 1 arg ""
	setcycle 2 opt1 ""
	setcycle 2 opt2 ""
	setcycle 2 opt3 ""
	setcycle 2 package ""
	setcycle 2 package_name ""
	setcycle 2 response_options ""
	setcycle 2 arg ""
	setcycle 3 opt1 ""
	setcycle 3 opt2 ""
	setcycle 3 opt3 ""
	setcycle 3 package ""
	setcycle 3 package_name ""
	setcycle 3 response_options ""
	setcycle 3 arg ""
	setcycle 4 opt1 ""
	setcycle 4 opt2 ""
	setcycle 4 opt3 ""
	setcycle 4 package ""
	setcycle 4 package_name ""
	setcycle 4 response_options ""
	setcycle 4 arg ""
	setcycle 5 opt1 ""
	setcycle 5 opt2 ""
	setcycle 5 opt3 ""
	setcycle 5 package ""
	setcycle 5 package_name ""
	setcycle 5 response_options ""
	setcycle 5 arg ""
	setcycle 6 opt1 ""
	setcycle 6 opt2 ""
	setcycle 6 opt3 ""
	setcycle 6 package ""
	setcycle 6 package_name ""
	setcycle 6 response_options ""
	setcycle 6 arg ""
	setcycle 7 opt1 ""
	setcycle 7 opt2 ""
	setcycle 7 opt3 ""
	setcycle 7 package ""
	setcycle 7 package_name ""
	setcycle 7 response_options ""
	setcycle 7 arg ""
	setcycle 8 opt1 ""
	setcycle 8 opt2 ""
	setcycle 8 opt3 ""
	setcycle 8 package ""
	setcycle 8 package_name ""
	setcycle 8 response_options ""
	setcycle 8 arg ""
	setcycle 9 opt1 ""
	setcycle 9 opt2 ""
	setcycle 9 opt3 ""
	setcycle 9 package ""
	setcycle 9 package_name ""
	setcycle 9 response_options ""
	setcycle 9 arg ""
	setcycle 10 opt1 ""
	setcycle 10 opt2 ""
	setcycle 10 opt3 ""
	setcycle 10 package ""
	setcycle 10 package_name ""
	setcycle 10 response_options ""
	setcycle 10 arg ""
	setcycle 11 opt1 ""
	setcycle 11 opt2 ""
	setcycle 11 opt3 ""
	setcycle 11 package ""
	setcycle 11 package_name ""
	setcycle 11 response_options ""
	setcycle 11 arg ""
	setcycle 12 opt1 ""
	setcycle 12 opt2 ""
	setcycle 12 opt3 ""
	setcycle 12 package ""
	setcycle 12 package_name ""
	setcycle 12 response_options ""
	setcycle 12 arg ""
	run installer_sequence

define sequence installer_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run variables always
	run question always
	run execute always
	run new_loop always

define loop new_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sketchpad "[feedback] = 1"

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Installed package(s):<br /><br />[package_string]<br /><br /><br />cmd:<br /><br />[cmd]<br /><br /><br />Output:<br /><br />[feedback_out]<br /><br /><br />Exit: [feedback_exit]<br /><br />Error:<br /><br />[feedback_error]" x=-416 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press a key to continue" x=0 y=320 z_index=0

define inline_script os_selection
	set description "Executes Python code"
	set _run ""
	___prepare__
	import platform
	
	if platform.system() == 'Windows':
	    var.file_package_list = "windows-packages.csv"
	    var.os_select = "Windows"
	else:
	    var.file_package_list = "linux-packages.csv"
	    var.os_select = "Linux"
	__end__

define sequence plugin_installer
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run os_selection always
	run welcome always
	run installer_loop always
	run done always

define sketchpad question
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[package_name]<br /><br /><br />[opt1]<br /><br />[opt2]<br /><br />[opt3]" x=-416 y=-288 z_index=0

define inline_script variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	var.feedback_exit = ""
	var.feedback_error = ""
	var.feedback_out = ""
	var.package_string = ""
	var.cmd = ""
	var.feedback = 0
	__end__

define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Welcome to the OpenSesame plugin and library installer<br /><br /><br />Using package list for: [os_select]<br />" x=-416 y=-288 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press a key to continue" x=0 y=320 z_index=0

